PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = Pupil_Test
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Pupillometry Experiment.
        press spacebar to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Py
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      Before Experiment:
        eyetracking ='1'
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -6)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Enter_ID
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  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        sounds = ['Audio/right_tick.wav','Audio/wrong_buzz.wav']
      Begin Routine:
        if key_resp_2.corr:
            sound = sounds[0]
        else:
            sound = sounds[1]
    SoundComponent Response
      sound [set every repeat] = $sound
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fourth_time
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  Routine Break
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press Spacebar to Continue
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if eyetracking == '1':
            import zmq
            import msgpack as serializer

            from time import sleep, time

            # Setup zmq context and remote helper
            ctx = zmq.Context()
            pupil_remote = zmq.Socket(ctx, zmq.REQ)
            pupil_remote.connect('tcp://127.0.0.1:50020')

            pupil_remote.send_string("PUB_PORT")
            pub_port = pupil_remote.recv_string()
            pub_socket = zmq.Socket(ctx, zmq.PUB)
            pub_socket.connect("tcp://127.0.0.1:" + str(pub_port))

            # set time to psychopy clock
            time_fn = core.monotonicClock.getTime

            # set pupil's time to psychopy time
            pupil_remote.send_string("T " + str(time_fn()))
            print(pupil_remote.recv_string())

            sleep(2.)

            # send notification:
            def notify(notification):
                """Sends ``notification`` to Pupil Remote"""
                topic = "notify." + notification["subject"]
                payload = serializer.dumps(notification, use_bin_type=True)
                pupil_remote.send_string(topic, flags=zmq.SNDMORE)
                pupil_remote.send(payload)
                return pupil_remote.recv_string()

            def send_trigger(trigger):
                payload = serializer.dumps(trigger, use_bin_type=True)
                pub_socket.send_string(trigger["topic"], flags=zmq.SNDMORE)
                pub_socket.send(payload)

            # Start the annotations plugin
            notify({"subject": "start_plugin", "name": "Annotation_Capture", "args": {}})

            # start recording
            pupil_remote.send_string('r')
            print(pupil_remote.recv_string())
            sleep(1.)


            def new_trigger(label, duration):
                return {
                "topic": "annotation",
                "label": label,
                "timestamp": time_fn(),
                "duration": duration,
                }

            label = "stop_experiment"
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)

        else:
            continueRoutine = False
  Routine Pupil
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if eyetracking == '1':
            import zmq
            import msgpack as serializer

            from time import sleep, time

            # Setup zmq context and remote helper
            ctx = zmq.Context()
            pupil_remote = zmq.Socket(ctx, zmq.REQ)
            pupil_remote.connect('tcp://127.0.0.1:50020')

            pupil_remote.send_string("PUB_PORT")
            pub_port = pupil_remote.recv_string()
            pub_socket = zmq.Socket(ctx, zmq.PUB)
            pub_socket.connect("tcp://127.0.0.1:" + str(pub_port))

            # set time to psychopy clock
            time_fn = core.monotonicClock.getTime

            # set pupil's time to psychopy time
            pupil_remote.send_string("T " + str(time_fn()))
            print(pupil_remote.recv_string())

            sleep(2.)

            # send notification:
            def notify(notification):
                """Sends ``notification`` to Pupil Remote"""
                topic = "notify." + notification["subject"]
                payload = serializer.dumps(notification, use_bin_type=True)
                pupil_remote.send_string(topic, flags=zmq.SNDMORE)
                pupil_remote.send(payload)
                return pupil_remote.recv_string()

            def send_trigger(trigger):
                payload = serializer.dumps(trigger, use_bin_type=True)
                pub_socket.send_string(trigger["topic"], flags=zmq.SNDMORE)
                pub_socket.send(payload)

            # Start the annotations plugin
            notify({"subject": "start_plugin", "name": "Annotation_Capture", "args": {}})

            # start recording
            pupil_remote.send_string('R pupil_Labs')
            print(pupil_remote.recv_string())
            sleep(1.)


            def new_trigger(label, duration):
                return {
                "topic": "annotation",
                "label": label,
                "timestamp": time_fn(),
                "duration": duration,
                }

            label = "start_experiment"
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)

        else:
            continueRoutine = False
  Routine Block_1
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent Ready_tone
      sound = Audio/650.wav
      startVal [time (s)] = 1.0
      volume = 0.5
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    SoundComponent Reference_tone
      sound = Audio/850.0.wav
      startVal [time (s)] = $first_time
      volume = 0.5
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    SoundComponent comparison_tone
      sound [set every repeat] = $sound_files
      startVal [time (s)] = $second_time
      volume = 0.5
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    SoundComponent Stop_tone
      sound = Audio/650.wav
      startVal [time (s)] = $third_time
      volume = 0.5
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'z','right'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 10
      storeCorrect = True
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  Routine Ready_Tone
    PolygonComponent polygon_3
      fillColor = white
      lineWidth = 0.3
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ready_wait
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    SoundComponent Ready
      sound = Audio/start.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        import numpy
      Begin Routine:
        ready_wait = np.random.choice(np.arange(2,7),1)[0]
  Routine Reference_Tone
    PolygonComponent polygon_4
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    SoundComponent sound_1
      sound = Audio/850.0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Comparison_Tone
    PolygonComponent polygon_5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent sound_2
      sound [set every repeat] = $sound_files
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine End_Tone
    PolygonComponent polygon_6
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent sound_3
      sound = Audio/Answer.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'lshift','rshift'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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Flow
  Routine trial
  Routine Pupil
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loopTemplate1.xlsx
    loopType = sequential
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    conditions:
      [{'sound_files': 'Audio/820.0.wav', 'answer': 'lshift', 'first_time': 4, 'second_time': 8, 'third_time': 12, 'fourth_time': 6},
      {'sound_files': 'Audio/826.0.wav', 'answer': 'lshift', 'first_time': 5, 'second_time': 9, 'third_time': 13, 'fourth_time': 10},
      {'sound_files': 'Audio/832.0.wav', 'answer': 'lshift', 'first_time': 6, 'second_time': 10, 'third_time': 14, 'fourth_time': 8},
      {'sound_files': 'Audio/838.0.wav', 'answer': 'lshift', 'first_time': 4, 'second_time': 8, 'third_time': 12, 'fourth_time': 9},
      {'sound_files': 'Audio/844.0.wav', 'answer': 'lshift', 'first_time': 2, 'second_time': 6, 'third_time': 10, 'fourth_time': 7},
      {'sound_files': 'Audio/850.0.wav', 'answer': 'rshift', 'first_time': 3, 'second_time': 7, 'third_time': 11, 'fourth_time': 8},
      {'sound_files': 'Audio/856.0.wav', 'answer': 'rshift', 'first_time': 6, 'second_time': 10, 'third_time': 14, 'fourth_time': 6},
      {'sound_files': 'Audio/862.0.wav', 'answer': 'rshift', 'first_time': 5, 'second_time': 9, 'third_time': 13, 'fourth_time': 10},
      {'sound_files': 'Audio/868.0.wav', 'answer': 'rshift', 'first_time': 4, 'second_time': 8, 'third_time': 12, 'fourth_time': 9},
      {'sound_files': 'Audio/874.0.wav', 'answer': 'rshift', 'first_time': 6, 'second_time': 10, 'third_time': 14, 'fourth_time': 8},
      {'sound_files': 'Audio/880.0.wav', 'answer': 'rshift', 'first_time': 4, 'second_time': 8, 'third_time': 12, 'fourth_time': 6}]
    Routine Ready_Tone
    Routine Reference_Tone
    Routine Comparison_Tone
    Routine End_Tone
    Routine feedback
  LoopTerminator trials
  LoopInitiator practice_block loopType="TrialHandler"
    conditionsFile = loopTemplate3.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sound_files': 'Audio/820.0.wav', 'answer': 'z', 'first_time': 4, 'second_time': 8, 'third_time': 12, 'fourth_time': 6},
      {'sound_files': 'Audio/832.0.wav', 'answer': 'z', 'first_time': 6, 'second_time': 10, 'third_time': 14, 'fourth_time': 8},
      {'sound_files': 'Audio/844.0.wav', 'answer': 'z', 'first_time': 2, 'second_time': 6, 'third_time': 10, 'fourth_time': 7},
      {'sound_files': 'Audio/850.0.wav', 'answer': 'right', 'first_time': 3, 'second_time': 7, 'third_time': 11, 'fourth_time': 8},
      {'sound_files': 'Audio/862.0.wav', 'answer': 'right', 'first_time': 5, 'second_time': 9, 'third_time': 13, 'fourth_time': 10}]
    Routine Block_1
    Routine feedback
  LoopTerminator practice_block
  Routine Break
  Routine Pupil
  LoopInitiator Block1 loopType="TrialHandler"
    conditionsFile = loopTemplate2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sound_files': 'Audio/820.0.wav', 'answer': 'z', 'first_time': 4, 'second_time': 8, 'third_time': 12, 'fourth_time': 6},
      {'sound_files': 'Audio/826.0.wav', 'answer': 'z', 'first_time': 5, 'second_time': 9, 'third_time': 13, 'fourth_time': 10},
      {'sound_files': 'Audio/832.0.wav', 'answer': 'z', 'first_time': 6, 'second_time': 10, 'third_time': 14, 'fourth_time': 8},
      {'sound_files': 'Audio/838.0.wav', 'answer': 'z', 'first_time': 4, 'second_time': 8, 'third_time': 12, 'fourth_time': 9},
      {'sound_files': 'Audio/844.0.wav', 'answer': 'z', 'first_time': 2, 'second_time': 6, 'third_time': 10, 'fourth_time': 7},
      {'sound_files': 'Audio/850.0.wav', 'answer': 'right', 'first_time': 3, 'second_time': 7, 'third_time': 11, 'fourth_time': 8},
      {'sound_files': 'Audio/856.0.wav', 'answer': 'right', 'first_time': 6, 'second_time': 10, 'third_time': 14, 'fourth_time': 6},
      {'sound_files': 'Audio/862.0.wav', 'answer': 'right', 'first_time': 5, 'second_time': 9, 'third_time': 13, 'fourth_time': 10},
      {'sound_files': 'Audio/868.0.wav', 'answer': 'right', 'first_time': 4, 'second_time': 8, 'third_time': 12, 'fourth_time': 9},
      {'sound_files': 'Audio/874.0.wav', 'answer': 'right', 'first_time': 6, 'second_time': 10, 'third_time': 14, 'fourth_time': 8},
      {'sound_files': 'Audio/880.0.wav', 'answer': 'right', 'first_time': 4, 'second_time': 8, 'third_time': 12, 'fourth_time': 6}]
    Routine Block_1
    Routine feedback
  LoopTerminator Block1
  Routine Break
